CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:35
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "me")
    Name to assign these images:Melissa_Mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "qu")
    Name to assign these images:QuPath_Mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "amy")
    Name to assign these images:Amy_Mask
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "sd")
    Name to assign these images:SD_Mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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notes:['Four copies (updated_SD)']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
    Select the input image:Melissa_Mask
    Name the output object:MelissaObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:6|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
    Select the input image:Amy_Mask
    Name the output object:AmyObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:7|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
    Select the input image:QuPath_Mask
    Name the output object:QuPathObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:8|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
    Select the input image:SD_Mask
    Name the output object:SDObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectOverlap:[module_num:9|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notes:['*Three modules for comparing annotations. ']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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:MelissaObjects
    Select the objects to be tested for overlap against the ground truth:QuPathObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectOverlap:[module_num:10|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:AmyObjects
    Select the objects to be tested for overlap against the ground truth:QuPathObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectOverlap:[module_num:11|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:SDObjects
    Select the objects to be tested for overlap against the ground truth:QuPathObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectOverlap:[module_num:12|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:MelissaObjects
    Select the objects to be tested for overlap against the ground truth:SDObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectOverlap:[module_num:13|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:AmyObjects
    Select the objects to be tested for overlap against the ground truth:SDObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectOverlap:[module_num:14|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:MelissaObjects
    Select the objects to be tested for overlap against the ground truth:AmyObjects
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:15|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Melissa_Mask
    Select the image to be used to test for overlap:QuPath_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:16|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Amy_Mask
    Select the image to be used to test for overlap:QuPath_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:17|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:SD_Mask
    Select the image to be used to test for overlap:QuPath_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:18|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Amy_Mask
    Select the image to be used to test for overlap:SD_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:19|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Melissa_Mask
    Select the image to be used to test for overlap:SD_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:20|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Melissa_Mask
    Select the image to be used to test for overlap:Amy_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:21|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:SD_Mask
    Select the image to be used to test for overlap:Amy_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:22|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:Amy_Mask
    Select the image to be used to test for overlap:Melissa_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:23|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:SD_Mask
    Select the image to be used to test for overlap:Melissa_Mask
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageSkeleton:[module_num:24|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
    Select an image to measure:Amy_Mask

MeasureImageSkeleton:[module_num:25|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
    Select an image to measure:Melissa_Mask

MeasureImageSkeleton:[module_num:26|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
    Select an image to measure:QuPath_Mask

MeasureImageSkeleton:[module_num:27|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
    Select an image to measure:SD_Mask

MeasureImageAreaOccupied:[module_num:28|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Amy_Mask, Melissa_Mask, QuPath_Mask, SD_Mask
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#A21713
    Select objects to display:MelissaObjects
    Select outline color:Green
    Select objects to display:QuPathObjects
    Select outline color:#FB02FF
    Select objects to display:AmyObjects
    Select outline color:#0F0F00
    Select objects to display:SDObjects

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output/Save_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:Amy_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Amy_Mask
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output/Save_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:Melissa_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Melissa_Mask
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output/Save_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:QuPath_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:QuPath_Mask
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output/Save_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:SD_Mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:SD_Mask
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output/Save_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:35|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/DBP_Collagen_Barczak/Images for Amy/Annotator_comparison/Annotator_Comparison_202401/CP_Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:202401_
    Overwrite existing files without warning?:No
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